travelTimeCalc(int xPos, int yPos, Double[] stageSpeeds){
	double xTime = xPos/stageSpeeds[0];
	print(xTime);
	double yTime = yPos/stageSpeeds[1];
	print(yTime);

	if(xTime > yTime){
		print(xTime);
		mmc.sleep(xTime);
	}
	else if(yTime > xTime){
		print(yTime);
		mmc.sleep(yTime);
	}
	else{
		print(10000);
		mmc.sleep(10000);
	}
}



 	speeds = new Double[]{20.0,2.4,2.4};

/*Initialize stage variables:
 * Variables start with axis of stage
 * Start: desired starting position in um
 * Step: desired step size in um
 * TileNum: the number of images collected along that dimension
 * CurrPos: initialized for creating stage sequences
 * Speed: The max speed set for the specified stage in mm/sec
 */
	double xStart = 100000;
	double xStep = 10000;
	double xTileNum = 5;
	double xCurrPos = xStart;
			
	double yStart = 25000;
	double yStep = 1000;
	double yTileNum = 5;
	double yCurrPos = yStart;

travelTimeCalc(xStart, yStart, speeds);