# Generated by Configurator on Mon May 16 12:21:38 CDT 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM8,SerialManager,COM8
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,FreeSerialPort,Port,COM8

# Pre-init settings for COM ports
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,115200
Property,COM8,DTR,Disable
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

