# Generated by Configurator on Wed Aug 11 12:34:15 CDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,AndorClara,Andor,Andor
Device,GenericSLM,GenericSLM,GenericSLM

# Pre-init settings for devices
Property,AndorClara,Camera,| Clara | DR328_C02~G | 2937 |
Property,GenericSLM,GraphicsPort,\\.\DISPLAY2
Property,GenericSLM,TestModeHeight,128
Property,GenericSLM,TestModeWidth,128

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,AndorClara
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

