# Generated by Configurator on Wed Aug 18 15:12:23 CDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,Andor,Andor,Andor
Device,GenericSLM,GenericSLM,GenericSLM

# Pre-init settings for devices
Property,Andor,Camera,| Clara | DR328_C02~G | 2937 |
Property,GenericSLM,GraphicsPort,\\.\DISPLAY2

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

