# Generated by Configurator on Wed Aug 11 14:40:16 CDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,GenericSLM,GenericSLM,GenericSLM

# Pre-init settings for devices
Property,GenericSLM,GraphicsPort,\\.\DISPLAY2
Property,GenericSLM,TestModeHeight,128
Property,GenericSLM,TestModeWidth,128

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

