# Generated by Configurator on Wed Aug 18 15:29:07 CDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,Arduino-Input,Arduino,Arduino-Input
Device,Arduino-DAC1,Arduino,Arduino-DAC1
Device,Arduino-DAC2,Arduino,Arduino-DAC2
Device,Andor,Andor,Andor
Device,GenericSLM,GenericSLM,GenericSLM

# Pre-init settings for devices
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM3
Property,Arduino-Input,Pin,All
Property,Arduino-Input,Pull-Up-Resistor,On
Property,Arduino-DAC1,MaxVolt,5.0000
Property,Arduino-DAC2,MaxVolt,5.0000
Property,Andor,Camera,| Clara | DR328_C02~G | 2937 |
Property,GenericSLM,GraphicsPort,\\.\DISPLAY2

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,57600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub
Parent,Arduino-Input,Arduino-Hub
Parent,Arduino-DAC1,Arduino-Hub
Parent,Arduino-DAC2,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,Arduino-Shutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

